PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Attention Project code_Rashmita Ganguly
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Welcome
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    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This experiment consists of two parts with the first one being a practice trial and the actual experiment starting afterwards.

        There will be three horizontal lines on the screen and YOUR TASK is to report the COLOR of the circle on the CENTRAL LINE

        *Press R or G based on the color of the target* while ignoring other circles not in the centre

        Press Space to Proceed
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MainTrials
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    PolygonComponent line1
      fillColor = white
      pos = (-0.4, -0.14)
      shape = rectangle
      size = (0.22, 0.006)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent line2
      fillColor = white
      pos = (0, -0.14)
      shape = rectangle
      size = (0.22, 0.006)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent line3
      fillColor = white
      pos = (0.4, -0.14)
      shape = rectangle
      size = (0.22, 0.006)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = height
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    PolygonComponent flanker
      fillColor [set every repeat] = $flanker_color
      lineColor [set every repeat] = $flanker_color
      pos [set every repeat] = $(flanker_x, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = $flanker_start
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    PolygonComponent target
      fillColor [set every repeat] = $target_color
      lineColor [set every repeat] = $target_color
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = $target_start
      units = height
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    KeyboardComponent key_resp_1
      allowedKeys = 'r','g'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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  Routine Practice
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    PolygonComponent line1_2
      fillColor = white
      pos = (-0.4, -0.14)
      shape = rectangle
      size = (0.22, 0.006)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent line2_2
      fillColor = white
      pos = (0, -0.14)
      shape = rectangle
      size = (0.22, 0.006)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent line3_2
      fillColor = white
      pos = (0.4, -0.14)
      shape = rectangle
      size = (0.22, 0.006)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = height
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    PolygonComponent flanker_2
      fillColor [set every repeat] = $flanker_color
      lineColor [set every repeat] = $flanker_color
      pos [set every repeat] = $(flanker_x, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = $flanker_start
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    PolygonComponent target_2
      fillColor [set every repeat] = $target_color
      lineColor [set every repeat] = $target_color
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = $target_start
      units = height
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    KeyboardComponent key_resp_2
      allowedKeys = 'r','g'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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  Routine MainBegins
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The practice trials end here.

        From now on will be the actual trials.

        Report the color of the circle in the centre and ignore others.

        Red circle -> PRESS R
        Green circle -> PRESS G

        REMEMBER- Accuracy is more important than speed.

        Press Space to Proceed
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracticeBegins
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    TextComponent practicetrialstext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The Practice Trials Begin Now

        Do not hurry- Accuracy is more important than speed.

        Red circle -> Press R
        Green circle -> Press G

        Press Space to Proceed
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent Thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for Participating

        Press Space to Exit
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine PracticeBegins
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = Practice_Conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'presentation': 'prior', 'congruency': 'cong', 'target_color': 'red', 'flanker_color': 'red', 'flanker_side': 'left', 'flanker_x': -0.4, 'corr_ans': 'r', 'target_start': 0.4, 'flanker_start': 0.1},
      {'presentation': 'prior', 'congruency': 'incong', 'target_color': 'green', 'flanker_color': 'red', 'flanker_side': 'right', 'flanker_x': 0.4, 'corr_ans': 'g', 'target_start': 0.4, 'flanker_start': 0.1},
      {'presentation': 'prior', 'congruency': 'neutral', 'target_color': 'red', 'flanker_color': 'blue', 'flanker_side': 'left', 'flanker_x': -0.4, 'corr_ans': 'r', 'target_start': 0.4, 'flanker_start': 0.1},
      {'presentation': 'prior', 'congruency': 'cong', 'target_color': 'green', 'flanker_color': 'green', 'flanker_side': 'left', 'flanker_x': -0.4, 'corr_ans': 'g', 'target_start': 0.4, 'flanker_start': 0.1},
      {'presentation': 'post', 'congruency': 'cong', 'target_color': 'red', 'flanker_color': 'red', 'flanker_side': 'left', 'flanker_x': -0.4, 'corr_ans': 'r', 'target_start': 0.1, 'flanker_start': 0.4},
      {'presentation': 'post', 'congruency': 'incong', 'target_color': 'green', 'flanker_color': 'red', 'flanker_side': 'left', 'flanker_x': -0.4, 'corr_ans': 'g', 'target_start': 0.1, 'flanker_start': 0.4},
      {'presentation': 'post', 'congruency': 'neutral', 'target_color': 'green', 'flanker_color': 'blue', 'flanker_side': 'right', 'flanker_x': 0.4, 'corr_ans': 'g', 'target_start': 0.1, 'flanker_start': 0.4}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
    Routine Practice
  LoopTerminator trials_practice
  Routine MainBegins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'presentation': 'prior', 'congruency': 'cong', 'target_color': 'red', 'flanker_color': 'red', 'flanker_side': 'left', 'flanker_x': -0.4, 'corr_ans': 'r', 'target_start': 0.4, 'flanker_start': 0.1},
      {'presentation': 'prior', 'congruency': 'cong', 'target_color': 'red', 'flanker_color': 'red', 'flanker_side': 'right', 'flanker_x': 0.4, 'corr_ans': 'r', 'target_start': 0.4, 'flanker_start': 0.1},
      {'presentation': 'prior', 'congruency': 'cong', 'target_color': 'green', 'flanker_color': 'green', 'flanker_side': 'left', 'flanker_x': -0.4, 'corr_ans': 'g', 'target_start': 0.4, 'flanker_start': 0.1},
      {'presentation': 'prior', 'congruency': 'cong', 'target_color': 'green', 'flanker_color': 'green', 'flanker_side': 'right', 'flanker_x': 0.4, 'corr_ans': 'g', 'target_start': 0.4, 'flanker_start': 0.1},
      {'presentation': 'prior', 'congruency': 'incong', 'target_color': 'red', 'flanker_color': 'green', 'flanker_side': 'left', 'flanker_x': -0.4, 'corr_ans': 'r', 'target_start': 0.4, 'flanker_start': 0.1},
      {'presentation': 'prior', 'congruency': 'incong', 'target_color': 'red', 'flanker_color': 'green', 'flanker_side': 'right', 'flanker_x': 0.4, 'corr_ans': 'r', 'target_start': 0.4, 'flanker_start': 0.1},
      {'presentation': 'prior', 'congruency': 'incong', 'target_color': 'green', 'flanker_color': 'red', 'flanker_side': 'left', 'flanker_x': -0.4, 'corr_ans': 'g', 'target_start': 0.4, 'flanker_start': 0.1}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
    Routine MainTrials
  LoopTerminator trials
  Routine end
